CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Select the rule criteria:or (file does containregexp ".tiff") (file does containregexp ".TIF") (file does contain ".tif") (file does contain ".jpg")
    Name to assign these images:Feature
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.', 'WARNING: original pipeline used metadata grouping which was not converted during processing of current pipeline.']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
    Do you want to group your images?:No
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
Morph:[module_num:5|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
    Select the input image:Feature
    Name the output image:Iobrcbr
    Select the operation to perform:open
    Number of times to repeat operation:Once
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    Diameter:10
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Diameter:10
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Iobrcbr
    Name the output image:Illum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:Iobrcbr
    Name the output image:Corrected
    Select the illumination function:Illum
    Select how the illumination function is applied:Divide

ImageMath:[module_num:8|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Corrected
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:9|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notes:[u'Identify the nuclei from the histone stain image. Three-class thresholding works better than the default two-class method.']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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):1,50000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Name the outline image:CellOutline
    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Cells
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cellProfiler
    Overwrite existing files without warning?:No
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
DisplayDataOnImage:[module_num:12|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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Feature
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:13|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
    Select the type of image to save:Objects
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    Select the objects to save:Cells
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Feature
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tif
    Output file location:Default Output Folder|Desktop\\\\\\\\Cell Profiler Masks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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